<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="PropertySource" TypeArguments="io:GetDirectories,sys:String">
        <MemberName>Path</MemberName>
        <Value>C:\Users\neurogears\Documents\git\bruno-f-cruz\inc-2023-wheel-setup\src</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1:yyyy-MM-ddTHH-mm-ss}</Format>
        <Selector>Value,Timestamp.UtcDateTime</Selector>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>RootPath</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>2Photon</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>BoardEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Register xsi:type="beh:TimestampedPortDigitalInput" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>GetDI3</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                      <Value>DI3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="4" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RootPath</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/_2photon_strobe.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>AudioStimuli</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioReader">
                <al:FileName>assets\4kHz -15kHz, 4 sec, 4410 sample rate.wav</al:FileName>
                <al:BufferLength>0</al:BufferLength>
                <al:SampleRate>0</al:SampleRate>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MyWaveform</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MyWaveform</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BoardEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Register xsi:type="beh:TimestampedAnalogData" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RootPath</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/_AuditoryStimulus.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
              <rx:Name>TriggerAudio</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioPlayback">
                <al:DeviceName>Generic Software on Speakers (Realtek High Definition Audio)</al:DeviceName>
                <al:SampleRate>44100</al:SampleRate>
                <al:State>Playing</al:State>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Rename</scr:Name>
              <scr:Expression>new(Item1 as StimulusIndex, Item2 as Seconds)</scr:Expression>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="11" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="12" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="17" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Camera</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="beh:CreateMessage">
              <harp:Payload xsi:type="beh:CreateCamera0FrequencyPayload">
                <harp:MessageType>Write</harp:MessageType>
                <beh:Value>50</beh:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BoardCommands</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>StartCameras</rx:Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
                <harp:MessageType>Write</harp:MessageType>
                <beh:Value>CameraOutput0</beh:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BoardCommands</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>StopCameras</rx:Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:Payload xsi:type="beh:CreateStopCamerasPayload">
                <harp:MessageType>Write</harp:MessageType>
                <beh:Value>CameraOutput0</beh:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BoardCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="spk:SpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:ColorProcessing>Default</spk:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CameraData</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RootPath</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/_camera.avi</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:Suffix>None</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ChunkData</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>FrameID,Timestamp,LineStatusAll</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RootPath</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/_camera_metadata.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BoardEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RootPath</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/_camera_trigger.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="9" To="15" Label="Source1" />
            <Edge From="10" To="14" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="20" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="26" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DCMotor</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="beh:CreateMessage">
              <harp:Payload xsi:type="beh:CreatePwmFrequencyDO3Payload">
                <harp:MessageType>Write</harp:MessageType>
                <beh:Value>2000</beh:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BoardCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="DutyCycle" />
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:Payload xsi:type="beh:CreatePwmDutyCycleDO3Payload">
                <harp:MessageType>Write</harp:MessageType>
                <beh:Value>30</beh:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BoardCommands</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
              <rx:Name>StartDCMotor</rx:Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:Payload xsi:type="beh:CreatePwmStartPayload">
                <harp:MessageType>Write</harp:MessageType>
                <beh:Value>PwmDO3</beh:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BoardCommands</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
              <rx:Name>StopDCMotor</rx:Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:Payload xsi:type="beh:CreatePwmStopPayload">
                <harp:MessageType>Write</harp:MessageType>
                <beh:Value>8</beh:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BoardCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Wheel</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:CreateSerialPort">
                <io:Name>MyWheel</io:Name>
                <io:PortName>COM13</io:PortName>
                <io:BaudRate>115200</io:BaudRate>
                <io:Parity>None</io:Parity>
                <io:ParityReplace>63</io:ParityReplace>
                <io:DataBits>8</io:DataBits>
                <io:StopBits>One</io:StopBits>
                <io:Handshake>None</io:Handshake>
                <io:DiscardNull>false</io:DiscardNull>
                <io:DtrEnable>false</io:DtrEnable>
                <io:RtsEnable>false</io:RtsEnable>
                <io:ReadBufferSize>4096</io:ReadBufferSize>
                <io:WriteBufferSize>2048</io:WriteBufferSize>
                <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>s</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>MyWheel</io:PortName>
                <io:NewLine>\r\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BoardEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Register xsi:type="beh:TimestampedAnalogData" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RootPath</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/_wheel.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringRead">
                <io:PortName>MyWheel</io:PortName>
                <io:NewLine>\r\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%f,%f</Pattern>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Retry" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(Item1 as Angle, Item2 as RadialVelocity)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(Item1 as Value, Item2 as Seconds)</scr:Expression>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="15" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="17" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Harp</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>BoardCommands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="beh:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM9</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>BoardEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BoardEvents</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MessageType</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="harp:MessageType">
                      <Value>Event</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MessageType</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="harp:MessageType">
                      <Value>Write</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="BitwiseOr" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogHarpDemux</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="LogName" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:GroupBy">
                    <rx:KeySelector>Address,MessageType</rx:KeySelector>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>LogHarp</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="LogName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>BehaviorEvents</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RootPath</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}/{1}/{2}_{3}.bin</Format>
                          <Selector>Item1,Item2,Item3.Item2,Item3.Item1</Selector>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>LogName</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>MessageBytes</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LogName</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Path" Selector="it" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:MatrixWriter">
                            <dsp:Suffix>None</dsp:Suffix>
                            <dsp:Overwrite>false</dsp:Overwrite>
                            <dsp:Layout>ColumnMajor</dsp:Layout>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="8" Label="Source3" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="8" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="16" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source2" />
                        <Edge From="16" To="17" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Delay">
          <gl:DueTime>PT0.5S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StartCameras</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:Timer">
            <gl:DueTime>PT5M</gl:DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>RepeatSound</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Count" />
              </Expression>
              <Expression xsi:type="rx:Defer">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="gl:Timer">
                        <gl:DueTime>PT0S</gl:DueTime>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>TriggerAudio</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="gl:Timer">
                        <gl:DueTime>PT9S</gl:DueTime>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:RepeatCount">
                  <rx:Count>20</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="2" Label="Source2" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:RepeatCount">
            <rx:Count>4</rx:Count>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT5M</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>RepeatMotor</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Count" />
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StartDCMotor</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT4S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StopDCMotor</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT9S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>20</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:RepeatCount">
          <rx:Count>4</rx:Count>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>